PsychoPy2experiment version="2021.1.2"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['Azonosító'], expName, expInfo['date'])
  Experiment info = {'Azonosító': '', 'Életkor (év)': '', 'Nem': "['válassz', 'férfi', 'nő', 'egyéb']", 'Domináns kéz': "['válassz', 'jobb', 'bal']"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = white
  expName = nback_task_v1
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Routines
  Routine trial
    CodeComponent choose_stim
      Code Type = Auto->JS
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      Begin Experiment:
        #stim constants
        stim_path = "stimuli/"
        stim_ext = ".BMP"
      Begin Routine:
        #choose_stim
        chosen_frakt = all_blokks[level_loop.thisRepN][blokk_loop.thisRepN][trial_loop.thisRepN]

        frakt_stim = stim_path + chosen_frakt + stim_ext


        #correct_ans
        correct = no_ans
        if level_loop.thisRepN == 0:
            if trial_loop.thisRepN > 0:
                if all_blokks[level_loop.thisRepN][blokk_loop.thisRepN][trial_loop.thisRepN] == all_blokks[level_loop.thisRepN][blokk_loop.thisRepN][trial_loop.thisRepN-1]:
                    correct = yes_ans
                else:
                    correct = no_ans
        elif level_loop.thisRepN == 1:
            if trial_loop.thisRepN > 1:
                if all_blokks[level_loop.thisRepN][blokk_loop.thisRepN][trial_loop.thisRepN] == all_blokks[level_loop.thisRepN][blokk_loop.thisRepN][trial_loop.thisRepN-2]:
                    correct = yes_ans
                else:
                    correct = no_ans
      Each Frame:
        #force end if answer is yes or no
        if len(key_resp.keys) > 0:
            if (key_resp.keys[-1] == yes_ans or key_resp.keys[-1] == no_ans):
                continueRoutine = False


        keys = event.getKeys()
        if "escape" in keys:
            win.close()
            core.quit()
    ImageComponent stim_frakt
      image [set during: trial.trial_ISI] = $frakt_stim
      size = (0.5, 0.5)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 1.8
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    KeyboardComponent key_resp
      forceEndRoutine = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 3.3
      store = all keys
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    CodeComponent logging_custom
      Code Type = Auto->JS
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      End Routine:
        #logging blokk
        task_blokk = "nback_" + str(level_loop.thisRepN+1) + "_blokk" + str(blokk_loop.thisRepN+1)
        thisExp.addData("feladat_blokk", task_blokk)

        #logging fractal
        thisExp.addData("Fraktál", chosen_frakt)

        #logging all_keys
        thisExp.addData("All_keys", key_resp.keys)

        #logging all_RT (adjusted to presentation)
        thisExp.addData("All_RT", key_resp.rt)

        #logging answer_key
        what_resp = "no_resp"
        ans_type = "none"
        RT_resp = None
        correctness = 0

        if key_resp.keys is not None:
            what_resp = "else"
            ans_type = "else"
            if yes_ans in key_resp.keys or no_ans in key_resp.keys:
                what_resp = key_resp.keys[-1]
                RT_resp = key_resp.rt[-1]


        thisExp.addData("Answer_key", what_resp)
        thisExp.addData("Answer RT", RT_resp)

        #logging correctness

        if correct == yes_ans and what_resp == yes_ans:
            ans_type = "hit"
            correctness = 1
        elif correct == yes_ans and what_resp == no_ans:
            ans_type = "miss"
            correctness = 0
        elif correct == no_ans and what_resp == no_ans:
            ans_type = "correct rejection"
            correctness = 1
        elif correct == no_ans and what_resp == yes_ans:
            ans_type = "false alarm"
            correctness = 0

        thisExp.addData("Response type", ans_type)
        thisExp.addData("Correctness", correctness)
    StaticComponent trial_ISI
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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  Routine hello
    CodeComponent makeBlocks
      Code Type = Auto->JS
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      Begin Experiment:
        # Online Python compiler (interpreter) to run Python online.
        #Packages
        import random as r

        #Global vars
        all_stimuli_1 = ["B","C","D","F","G","H","J","K","L","M","N","P","Q", "R", "S", "T", "V", "W", "Y", "Z"]
        all_stimuli = ["D","F","H","L","P","Q","Y","Z","S","J"]

        PracticeTargetNum = 3
        TargetNum = 10
        PracticeFractals = 10
        TrialFractals = 10
        PracticeTrialNum = 18
        TrialNum = 48
        LevelNum = 2
        BlokkNum = 2

        #function
        #diff_num is 2 for 1-back and 3 for 2-back
        def ensure_hits (trial_num, targ_num, diff_num):
            list_ready = False
            hit_list = ["miss"] * (trial_num - targ_num)

            while list_ready == False:
                hit_indexes = r.sample(range(diff_num-1, trial_num), targ_num)
                hit_indexes.sort()
                errors = []
                for i,x in enumerate(hit_indexes):
                    if i > 0:
                        if (hit_indexes[i] - hit_indexes[i-1]) < diff_num:
                            errors.append("x")
                if len(errors) == 0:
                    list_ready = True

            for ind in hit_indexes:
                hit_list.insert(ind, "hit")

            return hit_list

        def make_block(which_level, blokk_stimuli, trial_num, targ_num):
            completed_blokk = []

            if which_level == 0:
                hit_vector = ensure_hits(trial_num, targ_num, 2)

                for trial in range(trial_num):
                    stim_for_trial = blokk_stimuli[:]

                    if hit_vector[trial] == "hit":
                        trial_stim = completed_blokk[trial-1]
                    else:
                        if trial > 0:
                            stim_for_trial.remove(completed_blokk[trial-1])
                        if trial > 1 and completed_blokk[trial-2] != completed_blokk[trial-1]:
                            stim_for_trial.remove(completed_blokk[trial-2])
                        trial_stim = r.choice(stim_for_trial)

                    completed_blokk.append(trial_stim)

            elif which_level == 1:
                hit_vector = ensure_hits(trial_num, targ_num, 3)

                for trial in range(trial_num):
                    stim_for_trial = blokk_stimuli[:]

                    if hit_vector[trial] == "hit":
                        trial_stim = completed_blokk[trial-2]
                    else:
                        if trial > 0:
                            stim_for_trial.remove(completed_blokk[trial-1])
                        if trial > 1:
                            stim_for_trial.remove(completed_blokk[trial-2])
                        if trial > 2 and completed_blokk[trial-3] != completed_blokk[trial-1]:
                            stim_for_trial.remove(completed_blokk[trial-3])
                        trial_stim = r.choice(stim_for_trial)

                    completed_blokk.append(trial_stim)

            return completed_blokk

        #Making blokks
        all_blokks = []
        for level in range(LevelNum):
            level_stimuli = all_stimuli[:]
            print(level_stimuli)
            completed_level = []
            for blokk in range(BlokkNum):
                blokk_stimuli = r.sample(level_stimuli, TrialFractals)
                print(blokk_stimuli)
                completed_blokk = make_block(level, blokk_stimuli, TrialNum, TargetNum)
                completed_level.append(completed_blokk)
            all_blokks.append(completed_level)

        #making practice blokks
        practice_blokks = []
        for level_pract in range(LevelNum):
            level_stimuli_p = r.sample(all_stimuli, PracticeFractals)
            pract_block = make_block(level_pract, level_stimuli_p, PracticeTrialNum, PracticeTargetNum)
            practice_blokks.append(pract_block)
    TextComponent instr_instr
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Köszöntjük a kísérletünkben!


        Kérjük, hogy nyomjon SPACE gombot a kezdéshez!
    KeyboardComponent instr_tovabb
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine level_instr
    CodeComponent choose_instr
      Code Type = Auto->JS
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      Begin Routine:
        #Instr based on level
        task_instr_level = ""
        if level_loop.thisRepN == 0:
            task_instr_level = "Ebben a feladatban képek fognak megjelenni egymás után a képernyőn. Egyszerre egy kép fog megjelenni.\n\nNyomja meg a(z) {} betűt, ha a kép ugyanaz, mint amit eggyel korábban látott!\nA többi esetben, amikor a kép nem egyezik meg az eggyel korábbival, nyomja meg az {} betűt.\n\nA képek gyorsan jönnek egymás után, úgyhogy gyorsnak kell lennie.\nNyomjon SPACE gombot a továbblépéshez!".format(yes_ans.upper(), no_ans.upper())
        elif level_loop.thisRepN == 1:
            task_instr_level = "Ebben a feladatban is képeket fog látni.\n\nNyomja meg a(z) {} betűt, ha a kép ugyanaz, mint amit kettővel korábban látott!\nA többi esetben, amikor a kép nem egyezik meg a kettővel korábbival, nyomja meg az {} betűt.\n\nA képek gyorsan jönnek egymás után, úgyhogy gyorsnak kell lennie.\nNyomjon SPACE gombot a továbblépéshez!".format(yes_ans.upper(), no_ans.upper())
    TextComponent lvl_instr
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $task_instr_level
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    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine kezesseg
    TextComponent kezesseg_instr
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Melyik kezét fogja használni a feladatban?

        Amennyiben lehetséges, használja a NEM-DOMINÁNS kezét.

        Bal kéz: B gomb
        Jobb kéz: J gomb
    KeyboardComponent kezesseg_resp
      allowedKeys = 'b', 'j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent whichKez
      Code Type = Auto->JS
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      End Routine:
        #which hands
        if "b" in kezesseg_resp.keys:
            yes_ans = 'e'
            no_ans = 'r'
            ans_options = [yes_ans, no_ans]

        elif "j" in kezesseg_resp.keys:
            yes_ans = 'u'
            no_ans = 'i'
            ans_options = [yes_ans, no_ans]
  Routine level_end
    CodeComponent end_text
      Code Type = Auto->JS
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      Begin Routine:
        end_text = 'Vége az első feladatnak!\n\nA folytatáshoz nyomja meg a SPACE gombot.'
        if level_loop.thisRepN > 0:
            end_text = 'Vége a feladatoknak!\n\nKöszönjük a részvételt!\nA kilépéshez nyomja meg a SPACE gombot!'
    TextComponent text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $end_text
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    KeyboardComponent end_keys
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  Routine practice_trial
    CodeComponent choose_pract_stim
      Code Type = Auto->JS
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      Begin Routine:
        #choose_stim
        chosen_frakt_p = practice_blokks[level_loop.thisRepN][practice_loop.thisRepN]

        frakt_stim_p = stim_path + chosen_frakt_p + stim_ext


        #correct_ans
        correct_pract = no_ans
        if level_loop.thisRepN == 0:
            if practice_loop.thisRepN > 0:
                if practice_blokks[level_loop.thisRepN][practice_loop.thisRepN] == practice_blokks[level_loop.thisRepN][practice_loop.thisRepN-1]:
                    correct_pract = yes_ans
                else:
                    correct_pract = no_ans
        elif level_loop.thisRepN == 1:
            if practice_loop.thisRepN > 1:
                if practice_blokks[level_loop.thisRepN][practice_loop.thisRepN] == practice_blokks[level_loop.thisRepN][practice_loop.thisRepN-2]:
                    correct_pract = yes_ans
                else:
                    correct_pract = no_ans
      Each Frame:
        #force end if answer is yes or no
        if len(pract_resp.keys) > 0:
            if (pract_resp.keys[-1] == yes_ans or pract_resp.keys[-1] == no_ans):
                continueRoutine = False


        keys = event.getKeys()
        if "escape" in keys:
            win.close()
            core.quit()
    ImageComponent pract_stim_frakt
      image [set during: practice_trial.ISI] = $frakt_stim_p
      size = (0.5, 0.5)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 1.8
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    KeyboardComponent pract_resp
      forceEndRoutine = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 3.3
      store = all keys
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    StaticComponent ISI
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    CodeComponent logging_practice
      Code Type = Auto->JS
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      End Routine:
        #logging blokk
        task_blokk = "nback_" + str(level_loop.thisRepN+1) + "_practice"
        thisExp.addData("feladat_blokk", task_blokk)

        #logging fractal
        thisExp.addData("Fraktál", chosen_frakt_p)

        #logging all_keys
        thisExp.addData("All_keys", pract_resp.keys)

        #logging all_RT (adjusted to presentation)
        thisExp.addData("All_RT", pract_resp.rt)

        #logging answer_key
        what_resp = "no_resp"
        ans_type = "none"
        RT_resp = None
        correctness = 0

        if pract_resp.keys is not None:
            what_resp = "else"
            ans_type = "else"
            if yes_ans in pract_resp.keys or no_ans in pract_resp.keys:
                what_resp = pract_resp.keys[-1]
                RT_resp = pract_resp.rt[-1]


        thisExp.addData("Answer_key", what_resp)
        thisExp.addData("Answer RT", RT_resp)

        #logging correctness

        if correct_pract == yes_ans and what_resp == yes_ans:
            ans_type = "hit"
            correctness = 1
        elif correct_pract == yes_ans and what_resp == no_ans:
            ans_type = "miss"
            correctness = 0
        elif correct_pract == no_ans and what_resp == no_ans:
            ans_type = "correct rejection"
            correctness = 1
        elif correct_pract == no_ans and what_resp == yes_ans:
            ans_type = "false alarm"
            correctness = 0

        thisExp.addData("Response type", ans_type)
        thisExp.addData("Correctness", correctness)
  Routine repeatPractice
    CodeComponent pract_repeat_code
      Code Type = Auto->JS
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      Begin Routine:
        repeat_text = "Újraindítsuk a gyakorlást?\n\nIgen = {}\nNem = {}".format(yes_ans.upper(),no_ans.upper())
      End Routine:
        if no_ans in repeat_practice_key.keys:
            practiceRepeat.nReps = 0
    TextComponent repeat_pract_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $repeat_text
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    KeyboardComponent repeat_practice_key
      allowedKeys [set every repeat] = ans_options
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pract_inst
    CodeComponent practi_inst_text_code
      Code Type = Auto->JS
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      Begin Routine:
        #Instr based on level
        pract_inst_textstim = ""
        if level_loop.thisRepN == 0:
            pract_inst_textstim = "Gyakorló feladat\n\nNyomja meg a(z) {} betűt, ha a kép ugyanaz, mint amit eggyel korábban látott!\nA többi esetben, amikor a kép nem egyezik meg az eggyel korábbival, nyomja meg az {} betűt.\n\nNyomjon SPACE gombot a továbblépéshez!".format(yes_ans.upper(), no_ans.upper())
        elif level_loop.thisRepN == 1:
            pract_inst_textstim = "Gyakorló feladat\n\nNyomja meg a(z) {} betűt, ha a kép ugyanaz, mint amit kettővel korábban látott!\nA többi esetben, amikor a kép nem egyezik meg a kettővel korábbival, nyomja meg az {} betűt.\n\nNyomjon SPACE gombot a továbblépéshez!".format(yes_ans.upper(), no_ans.upper())
    TextComponent pract_inst_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $pract_inst_textstim
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    KeyboardComponent pract_inst_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  Routine szunet_instr
    CodeComponent szunet_text_code
      Code Type = Auto->JS
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      Begin Routine:
        #Instr based on level
        szunet_instr_text = ""
        if level_loop.thisRepN == 0:
            szunet_instr_text = "Szünet!\n\nTovábblépéskor kezdődik a feladat.\nNyomja meg a(z) {} betűt, ha a kép ugyanaz, mint amit eggyel korábban látott!\nA többi esetben, amikor a kép nem egyezik meg az eggyel korábbival, nyomja meg az {} betűt.\n\nA képek gyorsan jönnek egymás után, úgyhogy gyorsnak kell lennie.\nNyomjon SPACE gombot a továbblépéshez!".format(yes_ans.upper(), no_ans.upper())
        elif level_loop.thisRepN == 1:
            szunet_instr_text = "Szünet!\n\nTovábblépéskor kezdődik a feladat.\nNyomja meg a(z) {} betűt, ha a kép ugyanaz, mint amit kettővel korábban látott!\nA többi esetben, amikor a kép nem egyezik meg a kettővel korábbival, nyomja meg az {} betűt.\n\nA képek gyorsan jönnek egymás után, úgyhogy gyorsnak kell lennie.\nNyomjon SPACE gombot a továbblépéshez!".format(yes_ans.upper(), no_ans.upper())
    TextComponent szunet_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $szunet_instr_text
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    KeyboardComponent szunet_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  Routine blokk_szun
    TextComponent blokk_szun_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Szünet!

        Nyomjon SPACE-t a folytatáshoz!
    KeyboardComponent blokk_szun_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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Flow
  Routine hello
  Routine kezesseg
  LoopInitiator level_loop loopType="TrialHandler"
    loopType = random
    nReps = LevelNum
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    Routine level_instr
    LoopInitiator practiceRepeat loopType="TrialHandler"
      loopType = random
      nReps = 300
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      Routine pract_inst
      LoopInitiator practice_loop loopType="TrialHandler"
        loopType = random
        nReps = PracticeTrialNum
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        Routine practice_trial
      LoopTerminator practice_loop
      Routine repeatPractice
    LoopTerminator practiceRepeat
    Routine szunet_instr
    LoopInitiator blokk_loop loopType="TrialHandler"
      loopType = random
      nReps = BlokkNum
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      LoopInitiator trial_loop loopType="TrialHandler"
        loopType = random
        nReps = TrialNum
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        Routine trial
      LoopTerminator trial_loop
      Routine blokk_szun
    LoopTerminator blokk_loop
    Routine level_end
  LoopTerminator level_loop
